CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Date>.*)-(?P<Plate>p[0-9]{2,3})-(?P<Researcher>[A-Z]{2,3})_(?P<Well>[A-Z][0-9]{2})
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "EJG")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:1
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "EJG")
    Name to assign these images:RawImage
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:/Users/njwheeler/GitHub/wrmXpress/cp_pipelines/masks/well_mask.png   
    Name to assign this image:WellMask
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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enabled:False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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:SubtractRaw
    Image or measurement?:Image
    Select the first image:RawImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
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    Multiply the second image by:1.0
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
MaskImage:[module_num:6|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
    Select the input image:RawImage
    Name the output image:RawMask
    Use objects or an image as a mask?:Image
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    Select image for mask:WellMask
    Invert the mask?:No

Smooth:[module_num:7|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
    Select the input image:RawMask
    Name the output image:Smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2.5
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
EnhanceEdges:[module_num:8|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
    Select the input image:Smooth
    Name the output image:WormEdges
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
Smooth:[module_num:9|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
    Select the input image:WormEdges
    Name the output image:SmoothedEdges
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:10
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:SmoothedEdges
    Name the primary objects to be identified:WormObjects
    Typical diameter of objects, in pixel units (Min,Max):10,30000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After declumping only
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.001
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
MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:WormObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:12|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
    Select the objects to filter:WormObjects
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:30000
    Select the measurement to filter by:AreaShape_MajorAxisLength
    Filter using a minimum measurement value?:Yes
    Minimum value:25
    Filter using a maximum measurement value?:No
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
EditObjectsManually:[module_num:13|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
    Select the objects to be edited:FilterObjects
    Name the edited objects:SingleWorms
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:RawImage
    Allow overlapping objects?:No

ConvertObjectsToImage:[module_num:14|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
    Select the input objects:SingleWorms
    Name the output image:WormBinary
    Select the color format:Binary (black & white)
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
UntangleWorms:[module_num:15|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enabled:False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
    Select the input binary image:WormBinary
    Overlap style:Without overlap
    Name the output overlapping worm objects:OverlappingWorms
    Name the output non-overlapping worm objects:NonOverlappingWorms
    Training set file location:Elsewhere...|/Users/njwheeler/GitHub/wrmXpress/cp_pipelines/worm_models
    Training set file name:WheelerAdultTrainingSet.xml
    Use training set weights?:Yes
    Overlap weight:5.0
    Leftover weight:10.0
    Retain outlines of the overlapping objects?:Yes
    Outline colormap?:Default
    Name the overlapped outline image:OverlappedWormOutlines
    Retain outlines of the non-overlapping worms?:Yes
    Name the non-overlapped outlines image:NonoverlappedWormOutlines
    Train or untangle worms?:Train
    Minimum area percentile:1.0
    Minimum area factor:0.85
    Maximum area percentile:90.0
    Maximum area factor:1.0
    Minimum length percentile:1.0
    Minimum length factor:0.9
    Maximum length percentile:99.0
    Maximum length factor:1.1
    Maximum cost percentile:90.0
    Maximum cost factor:1.9
    Number of control points:21
    Maximum radius percentile:90.0
    Maximum radius factor:1.0
    Maximum complexity:High
    Custom complexity:400

StraightenWorms:[module_num:16|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enabled:False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
    Select the input untangled worm objects:NonOverlappingWorms
    Name the output straightened worm objects:StraightenedWorms
    Worm width:20
    Training set file location:Elsewhere...|/Users/njwheeler/GitHub/wrmXpress/cp_pipelines/worm_models
    Training set file name:WheelerAdultTrainingSet.xml
    Image count:1
    Measure intensity distribution?:No
    Number of transverse segments:1
    Number of longitudinal stripes:5
    Align worms?:Do not align
    Alignment image:None
    Select an input image to straighten:RawImage
    Name the output straightened image:StraightenedImage

MeasureObjectSizeShape:[module_num:17|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enabled:False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
    Select object sets to measure:StraightenedWorms
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RescaleIntensity:[module_num:18|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enabled:False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
    Select the input image:StraightenedImage
    Name the output image:StraightenedRescaled
    Rescaling method:Stretch each image to use the full intensity range
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:WormBinary
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawImage
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_SingleWorms
    Saved file format:tiff
    Output file location:Elsewhere...|/Users/njwheeler/GitHub/wrmXpress/cp_pipelines/worm_models
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:20|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|output/data/
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Metadata_FileLocation,Image|Metadata_Series,Image|Metadata_Plate,Image|Metadata_Date,Image|Metadata_Frame,Image|Metadata_Researcher,Image|Metadata_Well,StraightenedWorms|AreaShape_MinorAxisLength,StraightenedWorms|AreaShape_Center_X,StraightenedWorms|AreaShape_Center_Y,StraightenedWorms|AreaShape_BoundingBoxMaximum_Y,StraightenedWorms|AreaShape_BoundingBoxMaximum_X,StraightenedWorms|AreaShape_EquivalentDiameter,StraightenedWorms|AreaShape_Perimeter,StraightenedWorms|AreaShape_MajorAxisLength,StraightenedWorms|AreaShape_Compactness,StraightenedWorms|AreaShape_Solidity,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:StraightenedWorms
    Combine these object measurements with those of the previous object?:No
    File name:\g<Date>-\g<Plate>-\g<Researcher>_data.csv
    Use the object name for the file name?:No
