CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (extension does istif)
    Name to assign these images:RawImage
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (extension does ispng)
    Name to assign these images:WormMasks
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:WormMasks
    Name the primary objects to be identified:Worms
    Typical diameter of objects, in pixel units (Min,Max):10,10000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1
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    Manual threshold:0.000000001
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
ConvertObjectsToImage:[module_num:6|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
    Select the input objects:Worms
    Name the output image:WormImage
    Select the color format:Binary (black & white)
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
UntangleWorms:[module_num:7|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
    Select the input binary image:WormImage
    Overlap style:Without overlap
    Name the output overlapping worm objects:OverlappingWorms
    Name the output non-overlapping worm objects:NonOverlappingWorms
    Training set file location:Elsewhere...|/Users/njwheeler/Desktop/temp_root/wrmXpress/cp_pipelines/worm_models
    Training set file name:Cellpose_TrainingSet.xml
    Use training set weights?:Yes
    Overlap weight:10
    Leftover weight:100
    Retain outlines of the overlapping objects?:Yes
    Outline colormap?:Default
    Name the overlapped outline image:OverlappedWormOutlines
    Retain outlines of the non-overlapping worms?:Yes
    Name the non-overlapped outlines image:NonoverlappedWormOutlines
    Train or untangle worms?:Untangle
    Minimum area percentile:1.0
    Minimum area factor:0.85
    Maximum area percentile:90.0
    Maximum area factor:1.0
    Minimum length percentile:1.0
    Minimum length factor:0.9
    Maximum length percentile:99.0
    Maximum length factor:1.1
    Maximum cost percentile:90.0
    Maximum cost factor:1.9
    Number of control points:21
    Maximum radius percentile:90.0
    Maximum radius factor:1.0
    Maximum complexity:Medium
    Custom complexity:400

StraightenWorms:[module_num:8|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
    Select the input untangled worm objects:NonOverlappingWorms
    Name the output straightened worm objects:StraightenedWorms
    Worm width:20
    Training set file location:Elsewhere...|/Users/njwheeler/GitHub/wrmXpress/cp_pipelines/worm_models
    Training set file name:Cellpose_TrainingSet.xml
    Image count:1
    Measure intensity distribution?:No
    Number of transverse segments:4
    Number of longitudinal stripes:3
    Align worms?:Do not align
    Alignment image:None
    Select an input image to straighten:RawImage
    Name the output straightened image:StraightenedImage

MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:StraightenedWorms
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:10|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
    Select images to measure:StraightenedImage
    Select objects to measure:StraightenedWorms

RescaleIntensity:[module_num:11|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
    Select the input image:StraightenedImage
    Name the output image:StraightenedRescaled
    Rescaling method:Stretch each image to use the full intensity range
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:StraightenedRescaled
    Select method for constructing file names:Single name
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    Enter single file name:\g<Date>-\g<Plate>-\g<Researcher>_\g<Well>
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    Saved file format:tiff
    Output file location:Elsewhere...|output/straightened_worms
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|output/data/
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:StraightenedWorms|AreaShape_BoundingBoxArea,StraightenedWorms|AreaShape_ConvexArea,StraightenedWorms|AreaShape_FormFactor,StraightenedWorms|AreaShape_Orientation,StraightenedWorms|AreaShape_BoundingBoxMaximum_Y,StraightenedWorms|AreaShape_BoundingBoxMaximum_X,StraightenedWorms|AreaShape_MinFeretDiameter,StraightenedWorms|AreaShape_Center_Y,StraightenedWorms|AreaShape_Center_X,StraightenedWorms|AreaShape_EulerNumber,StraightenedWorms|AreaShape_MedianRadius,StraightenedWorms|AreaShape_MeanRadius,StraightenedWorms|AreaShape_MaximumRadius,StraightenedWorms|AreaShape_BoundingBoxMinimum_Y,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:StraightenedWorms
    Combine these object measurements with those of the previous object?:No
    File name:\g<Date>-\g<Plate>-\g<Researcher>_data.csv
    Use the object name for the file name?:No
