CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Date>.*)-(?P<Plate>p[0-9]{2,3})-(?P<Researcher>[A-Z]{2,3})_(?P<Well>[A-Z][0-9]{2})
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "EJG")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:1
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    Process as 3D?:No
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    Select the rule criteria:and (file doesnot contain "cellprob") (file doesnot contain "flowxy") (extension does istif)
    Name to assign these images:RawImage
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "flowxy")
    Name to assign these images:Flow
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cellprob")
    Name to assign these images:Cellprob
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:/Users/njwheeler/GitHub/wrmXpress/cp_pipelines/masks/well_mask.png
    Name to assign this image:WellMask
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MaskImage:[module_num:5|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
    Select the input image:Flow
    Name the output image:FlowMask
    Use objects or an image as a mask?:Image
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    Select image for mask:WellMask
    Invert the mask?:No

ColorToGray:[module_num:6|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
    Select the input image:FlowMask
    Conversion method:Combine
    Image type:RGB
    Name the output image:GrayFlowMask
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
Closing:[module_num:7|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
    Select the input image:GrayFlowMask
    Name the output image:ClosedFlow
    Structuring element:disk,2

RescaleIntensity:[module_num:8|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
    Select the input image:ClosedFlow
    Name the output image:RescaleFlow
    Rescaling method:Stretch each image to use the full intensity range
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
MaskImage:[module_num:9|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
    Select the input image:Cellprob
    Name the output image:CellprobMask
    Use objects or an image as a mask?:Image
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    Select image for mask:WellMask
    Invert the mask?:No

RescaleIntensity:[module_num:10|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
    Select the input image:CellprobMask
    Name the output image:RescaleCellprob
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:11|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:FlowTimesProb
    Image or measurement?:Image
    Select the first image:RescaleCellprob
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:RescaleFlow
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:FlowTimesProb
    Name the primary objects to be identified:WormObjects
    Typical diameter of objects, in pixel units (Min,Max):20,75000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.9
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
MeasureObjectSizeShape:[module_num:13|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
    Select object sets to measure:WormObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:14|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
    Select the objects to filter:WormObjects
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:350
    Filter using a maximum measurement value?:No
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
FillObjects:[module_num:15|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
    Select the input object:FilterObjects
    Name the output object:FillObjects
    Minimum hole size:200
    Planewise fill:No

EditObjectsManually:[module_num:16|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
    Select the objects to be edited:FilterObjects
    Name the edited objects:SingleWorms
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:RawImage
    Allow overlapping objects?:No

ConvertObjectsToImage:[module_num:17|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
    Select the input objects:SingleWorms
    Name the output image:WormBinary
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:WormBinary
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawImage
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_SingleWorms
    Saved file format:tiff
    Output file location:Elsewhere...|/Users/njwheeler/GitHub/wrmXpress/cp_pipelines/worm_models
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
